
i:Ts/NumberOfThreads = 0




s:Ge/World/Material  = "G4_AIR"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

s:Ge/TestCylinder/Parent   = "World"
s:Ge/TestCylinder/Type     = "TsCylinder"
s:Ge/TestCylinder/Material = "Lucite"
d:Ge/TestCylinder/RMin     = 0.0 cm
d:Ge/TestCylinder/RMax     = 16. cm
d:Ge/TestCylinder/HL       = 1.5 m
d:Ge/TestCylinder/SPhi     = 0. deg
d:Ge/TestCylinder/DPhi     = 360. deg
d:Ge/TestCylinder/TransX   = 0. cm
d:Ge/TestCylinder/TransY   = 0. cm
d:Ge/TestCylinder/TransZ   = 0. cm
d:Ge/TestCylinder/RotX     = 0. deg
d:Ge/TestCylinder/RotY     = 0.0 deg
d:Ge/TestCylinder/RotZ     = 0. deg
s:Ge/TestCylinder/Color    = "blue"
i:Ge/TestCylinder/RBins    = 1
i:Ge/TestCylinder/PhiBins  = 1
i:Ge/TestCylinder/ZBins    = 3000

s:Sc/EnergyCylinder/Quantity                  = "EnergyDeposit"
s:Sc/EnergyCylinder/Component                 = "TestCylinder"
#i:Sc/EnergyCylinder/ZBins                     = 300
s:Sc/EnergyCylinder/OutputType                = "csv"
b:Sc/EnergyCylinder/OutputToConsole           = "TRUE"
s:Sc/EnergyCylinder/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/DoseCylinder/Quantity                  = "DoseToMedium"
s:Sc/DoseCylinder/Component                 = "TestCylinder"
#i:Sc/DoseCylinder/ZBins                     = 300
b:Sc/DoseCylinder/OutputToConsole           = "TRUE"
s:Sc/DoseCylinder/IfOutputFileAlreadyExists = "Overwrite"




s:Gr/MyOGL/Type        = "OpenGL"
i:Gr/MyOGL/WindowSizeX = 600
i:Gr/MyOGL/WindowSizeY = 600
i:Gr/MyOGL/WindowPosX  = 0
i:Gr/MyOGL/WindowPosY  = 0
i:Gr/MyOGL/WindowPosZ  = 0
d:Gr/MyOGL/Theta       = 90. deg
d:Gr/MyOGL/Phi         = 90. deg
u:Gr/MyOGL/Zoom        = 1.5
s:Gr/MyOGL/ColorBy     = "particletype"
b:Gr/MyOGL/HiddenLineRemovalForTrajectories = "True"




s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "gamma"
d:So/Example/BeamEnergy = 56.4 keV
u:So/Example/BeamEnergySpread         = 0.0001
s:So/Example/BeamPositionDistribution = "None"
s:So/Example/BeamPositionCutoffShape  = "None"
s:So/Example/BeamShape="Point"
#d:So/Example/BeamPositionCutoffX      = 1. cm
#d:So/Example/BeamPositionCutoffY      = 1. cm
#d:So/Example/BeamPositionSpreadX      = 0.05 cm
#d:So/Example/BeamPositionSpreadY      = 0.05 cm

s:Ge/BeamPosition/Parent="World"
#s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=-60. cm
d:Ge/BeamPosition/TransY=0. cm
d:Ge/BeamPosition/TransZ= 0. cm
d:Ge/BeamPosition/RotY=270. deg
d:Ge/BeamPosition/RotX=90. deg


sv:Ph/Default/Modules = 1 "g4em-standard_opt0"


s:So/Example/BeamAngularDistribution  = "Flat"
d:So/Example/BeamAngularCutoffX       = 14.9314 deg # cutoff is in half length
# tan inverse of 16/60 = 14.9314
d:So/Example/BeamAngularCutoffY       = 0.477 deg
# tan inverse of 0.5/60 = 0.477


i:So/Example/NumberOfHistoriesInRun   = 10000



i:Ts/ShowHistoryCountAtInterval = 1000
b:Ts/PauseBeforeQuit = "True"
