# Read phase space in TOPAS ASCII form

b:Ge/World/Invisible = "F"

s:Ge/VacFilm/Type     = "TsBox"
s:Ge/VacFilm/Parent   = "World"
s:Ge/VacFilm/Material = "G4_WATER"
d:Ge/VacFilm/HLX      = 50.0 cm
d:Ge/VacFilm/HLY      = 50.0 cm
d:Ge/VacFilm/HLZ      = 1.0 cm
d:Ge/VacFilm/TransX   = 0. cm
d:Ge/VacFilm/TransY   = 0. cm
d:Ge/VacFilm/TransZ   = Tf/OuterBoxTrans/Value cm
d:Ge/VacFilm/RotX     = Tf/OuterBoxRot/Value deg
d:Ge/VacFilm/RotY     = 0. deg
d:Ge/VacFilm/RotZ     = 0. deg
s:Ge/VacFilm/Color    = "skyblue"

s:So/Example/Type                            = "PhaseSpace"
s:So/Example/PhaseSpaceFileName              = "ASCII"
s:So/Example/Component                       = "VacFilm"
b:So/Example/PhaseSpaceIncludeEmptyHistories = "True"

s:Tf/OuterBoxTrans/Function            = "Linear cm"
d:Tf/OuterBoxTrans/Rate                = 100. cm/ms
d:Tf/OuterBoxTrans/StartValue          = 0. cm
d:Tf/OuterBoxTrans/RepetitionInterval  = 360. ms

s:Tf/OuterBoxRot/Function            = "Linear deg"
d:Tf/OuterBoxRot/Rate                = 20. deg/ms
d:Tf/OuterBoxRot/StartValue          = 0. deg
d:Tf/OuterBoxRot/RepetitionInterval  = 360. ms

i:Tf/NumberOfSequentialTimes = 4
d:Tf/TimelineEnd             = 4.0 ms

# Graphics
s:Gr/ViewA/Type             = "OpenGL"
i:Gr/ViewA/WindowSizeX      = 900
i:Gr/ViewA/WindowSizeY      = 900
d:Gr/ViewA/Theta            = 55 deg
d:Gr/ViewA/Phi              = 20 deg
s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

i:Ts/ShowHistoryCountAtInterval = 10
b:Ts/PauseBeforeQuit = "True"
