
i:Ts/NumberOfThreads = 0




s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 1.0 m
d:Ge/World/HLY       = 1.0 m
d:Ge/World/HLZ       = 1.0 m
b:Ge/World/Invisible = "True"

s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Material = "Vacuum"
d:Ge/Phantom/HLX      = 10.0 cm
d:Ge/Phantom/HLY      = 10.0 cm
d:Ge/Phantom/HLZ      = 0.5 cm
d:Ge/Phantom/TransZ   = 0. cm
s:Ge/Phantom/Color    = "white"
i:Ge/Phantom/XBins    = 1
i:Ge/Phantom/YBins    = 1
i:Ge/Phantom/ZBins    = 1

sv:Ma/User_Lucite/Components=3 "Carbon" "Oxygen" "Hydrogen"
uv:Ma/User_Lucite/Fractions=1 1.0
d:Ma/User_Lucite/Density=7.31 g/cm3
s:Ma/User_Lucite/DefaultColor="skyblue"
i:Ma/User_Lucite/AtomicNumber= 50
d:Ma/User_Lucite/MeanExcitationEnergy=488 eV
d:Ma/User_Lucite/AtomicMass=118.71 g/mole

s:Ge/Lucite/Type     = "TsBox"
s:Ge/Lucite/Parent   = "World"
s:Ge/Lucite/Material = "Lucite"
d:Ge/Lucite/HLX      = 10.0 cm
d:Ge/Lucite/HLY      = 10.0 cm
d:Ge/Lucite/HLZ      = 0.5 cm
d:Ge/Lucite/TransZ   = -1. cm
s:Ge/Lucite/Color    = "blue"
i:Ge/Lucite/XBins    = 1
i:Ge/Lucite/YBins    = 1
i:Ge/Lucite/ZBins    = 1


s:Sc/PhaseSpaceAtTinExit/Quantity = "PhaseSpace"
s:Sc/PhaseSpaceAtTinExit/Surface="Lucite/ZMinusSurface"
s:Sc/PhaseSpaceAtTinExit/OutputType="ASCII"
i:Sc/PhaseSpaceAtTinExit/OutputBufferSize            = 1000
sv:Sc/PhaseSpaceAtTinExit/OnlyIncludeParticlesNamed = 1 "gamma"
s:Sc/PhaseSpaceAtTinExit/OnlyIncludeParticlesGoing = "Out"
s:Sc/PhaseSpaceAtTinExit/OutputFile = "/home/michael/Documents/Topas_Work/TOPAS/Spectra_and_Attenuation_Test/LuciteExit"
s:Sc/PhaseSpaceAtTinExit/IfOutputFileAlreadyExists="Overwrite"

s:Sc/PhaseSpaceAtTinEntrance/Quantity = "PhaseSpace"
s:Sc/PhaseSpaceAtTinEntrance/Surface="Lucite/ZPlusSurface"
s:Sc/PhaseSpaceAtTinEntrance/OutputType="ASCII"
i:Sc/PhaseSpaceAtTinEntrance/OutputBufferSize            = 1000
sv:Sc/PhaseSpaceAtTinEntrance/OnlyIncludeParticlesNamed = 1 "gamma"
s:Sc/PhseSpaceAtTinEntrance/OnlyIncludeParticlesGoing = "In"
s:Sc/PhaseSpaceAtTinEntrance/IfOutputFileAlreadyExists="Overwrite"

s:Sc/PhaseSpaceAtVacuum/Quantity = "PhaseSpace"
s:Sc/PhaseSpaceAtVacuum/Surface="Lucite/ZPlusSurface"
s:Sc/PhaseSpaceAtVacuum/OutputType="ASCII"
i:Sc/PhaseSpaceAtVacuum/OutputBufferSize            = 1000
sv:Sc/PhaseSpaceAtVacuum/OnlyIncludeParticlesNamed = 1 "gamma"
s:Sc/PhaseSpaceAtVacuum/OnlyIncludeParticlesGoing = "In"
s:Sc/PhaseSpaceAtVacuum/IfOutputFileAlreadyExists="Overwrite"



s:Gr/MyOGL/Type        = "OpenGL"
i:Gr/MyOGL/WindowSizeX = 600
i:Gr/MyOGL/WindowSizeY = 600
i:Gr/MyOGL/WindowPosX  = 0
i:Gr/MyOGL/WindowPosY  = 0
i:Gr/MyOGL/WindowPosZ  = 0
#d:Gr/MyOGL/Theta       = 30. deg
#d:Gr/MyOGL/Phi         = 30. deg
u:Gr/MyOGL/Zoom        = 1.
s:Gr/MyOGL/ColorBy     = "particletype"
b:Gr/MyOGL/HiddenLineRemovalForTrajectories = "True"




s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "gamma"
d:So/Example/BeamEnergy = 60 keV
u:So/Example/BeamEnergySpread         = 0.00001
s:So/Example/BeamPositionDistribution = "None"
s:So/Example/BeamPositionCutoffShape  = "None"
#d:So/Example/BeamPositionCutoffX      = 1. cm
#d:So/Example/BeamPositionCutoffY      = 1. cm
#d:So/Example/BeamPositionSpreadX      = 0.05 cm
#d:So/Example/BeamPositionSpreadY      = 0.05 cm

s:Ge/BeamPosition/Parent="World"
#s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=0. cm
d:Ge/BeamPosition/TransY=0. cm
d:Ge/BeamPosition/TransZ= 4. cm


sv:Ph/Default/Modules = 1 "g4em-standard_opt0"


s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 179. deg
d:So/Example/BeamAngularCutoffY       = 179. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 100000



i:Ts/ShowHistoryCountAtInterval = 1000
b:Ts/PauseBeforeQuit = "True"
